CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', 'The goal of this pipeline is to quantify the number of stress granules in G3BP1-mScarlet cells.', 'Input: 2 individual grayscale (raw data) channel images (Hoechst ch00 and mScarlet ch01), and 1 overlayed colored image (scaled viewer).', 'Output: 3 different images with data overlaid on the overlayed color image (SG count for each cell, cytoplasm number, and outlines of the identified nuclei/cell body/SGs), and spreadsheets or an SQLite file with the data.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Experiment>.*)_(?P<Sequence>.*)_(?P<Well_Row>[A-B]{1})_(?P<Well_Column>[0-9]{1})_(?P<Position>.*)_(?P<tval>[t]{1})(?P<timepoint>[0-9]{2})_(?P<s>[s]{1})(?P<sval>[0-9]{2})_(?P<channel>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channel "ch00.tif")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "ch01.tif")
    Name to assign these images:G3BP1_mScarlet
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "overlay.tif")
    Name to assign these images:Overlay_G3BP1_Hoechst
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Rescale intensity to fit full range from 0 to 1. Allows for better identification of cell edges.']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
    Select the input image:G3BP1_mScarlet
    Name the output image:mScarlet_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Enhance speckles to allow for better identification of stress granules.']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
    Select the input image:G3BP1_mScarlet
    Name the output image:enhanced
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identifying stress granules. ']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
    Select the input image:enhanced
    Name the primary objects to be identified:SG
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:2.8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.03,1
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    Size of adaptive window:5
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify nuclei']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identify individual cell bodies. This way of identfying cells is much beter at distinguishing clumped cells as each cell is defined by having a nucleus.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell_body
    Select the method to identify the secondary objects:Propagation
    Select the input image:G3BP1_mScarlet
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.01,0.9
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Identify cytoplasm defined as the whole cell minus the nucleus']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
    Select the larger identified objects:Cell_body
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:11|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notes:['Relate SGs and the cell cytoplasms they are in']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
    Parent objects:Cytoplasm
    Child objects:SG
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:12|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notes:['Filter out any stress granules that are not within a cytoplasm. This is used to get rid of any stress granules that are within cells touching/cut off at the edges of the image because those cells are not being analyzed.']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
    Select the objects to filter:SG
    Name the output objects:FilterSG
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Parent_Cytoplasm
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
DisplayDataOnImage:[module_num:13|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notes:['Display the number of stress granules within each cell on the overlay color image with Hoechst and mScarlet.']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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Children_SG_Count
    Select the image on which to display the measurements:Overlay_G3BP1_Hoechst
    Text color:red
    Name the output image that has the measurements displayed:Cytoplasm_SGcount
    Font size (points):14
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:14|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notes:['Display the cytoplasm number of each cell on the overlay color image with Hoechst and mScarlet. This is to facilitate tracking of which output numbers/measurements correspond to which cells in the image.']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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay_G3BP1_Hoechst
    Text color:red
    Name the output image that has the measurements displayed:CytoplasmNumber
    Font size (points):14
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

OverlayOutlines:[module_num:15|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notes:['Display the outlines of the cell body, filtered stress granules, and nucleus of each cell on the overlay color image with Hoechst and mScarlet. This is to allow for verification that cells and stress granules were correctly identified.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlay_G3BP1_Hoechst
    Name the output image:OutlinesOverlayed
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Cell_body
    Select outline color:red
    Select objects to display:FilterSG
    Select outline color:Blue
    Select objects to display:FilteredNuclei

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:SG
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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notes:['Export data to spreadsheets.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - Michigan Medicine\\Live Cell Imaging of G3BP1-mScarlet Arsenite Stress Granule Assembly Disassembly\\Analysis v3\\Test Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:OutputData_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_SGcount
    Select method for constructing file names:From image filename
    Select image name for file prefix:Overlay_G3BP1_Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cytoplasm_SGcount
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - Michigan Medicine\\Live Cell Imaging of G3BP1-mScarlet Arsenite Stress Granule Assembly Disassembly\\Analysis v3\\Test Output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CytoplasmNumber
    Select method for constructing file names:From image filename
    Select image name for file prefix:Overlay_G3BP1_Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CytoplasmNumber
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - Michigan Medicine\\Live Cell Imaging of G3BP1-mScarlet Arsenite Stress Granule Assembly Disassembly\\Analysis v3\\Test Output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OutlinesOverlayed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Overlay_G3BP1_Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OutlinesOverlayed
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - Michigan Medicine\\Live Cell Imaging of G3BP1-mScarlet Arsenite Stress Granule Assembly Disassembly\\Analysis v3\\Test Output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
