CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Snapshot")
    Name to assign these images:Merged
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Merged
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:WGA
    Convert green to gray?:Yes
    Name the output image:PLA
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:WGA
    Name the primary objects to be identified:Cell
    Typical diameter of objects, in pixel units (Min,Max):150,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:0.95
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
MaskImage:[module_num:7|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
    Select the input image:PLA
    Name the output image:PLA_cell_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:PLA_cell_mask
    Name the output image:PLA_cell_mask_enhanced
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:PLA_cell_mask_enhanced
    Name the primary objects to be identified:PLA_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.05
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
RelateObjects:[module_num:10|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
    Parent objects:Cell
    Child objects:PLA_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/PLA rep 2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|Children_PLA_puncta_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
    File name:PLA_per_cell.csv
    Use the object name for the file name?:No
