CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Snapshot1")
    Name to assign these images:DAPI_color
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Snapshot2")
    Name to assign these images:PLA_color
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Snapshot3")
    Name to assign these images:G3BP1_color
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Snapshot4")
    Name to assign these images:WGA_color
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert to color image to grayscale']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
    Select the input image:DAPI_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:DAPI
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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notes:['Convert to color image to grayscale']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
    Select the input image:PLA_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:PLA
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
EnhanceOrSuppressFeatures:[module_num:7|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notes:['Enhance PLA puncta from background']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
    Select the input image:PLA
    Name the output image:PLA_enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
ColorToGray:[module_num:8|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notes:['Convert to color image to grayscale']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
    Select the input image:G3BP1_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:G3BP1
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['Enhance stress granules from background']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
    Select the input image:G3BP1
    Name the output image:G3BP1_enhanced
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
ColorToGray:[module_num:10|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notes:['Convert to color image to grayscale']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
    Select the input image:WGA_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:WGA
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identify nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.00,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:12|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notes:['Identify individual cells based on WGA staining. Regularization factor was set to 0.01 to take intensity into account for distinguishing cells touching each other']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:WGA
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:500
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:13|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notes:['Identify PLA puncta.']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
    Select the input image:PLA_enhanced
    Name the primary objects to be identified:PLA_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:14|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notes:['Identify stress granules']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
    Select the input image:G3BP1_enhanced
    Name the primary objects to be identified:Stress_granules
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Minimum Cross-Entropy

MaskObjects:[module_num:15|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
    Select objects to be masked:PLA_puncta
    Name the masked objects:PLA_puncta_masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Stress_granules
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:16|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
    Parent objects:Cells
    Child objects:Stress_granules
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:17|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
    Select the input objects:Stress_granules
    Name the new objects:SGs_merged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cells
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:Cells, SGs_merged
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:19|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notes:['Relate each cell with corresponding childeren PLA puncta']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
    Parent objects:Cells
    Child objects:PLA_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:SGs_merged
    Child objects:PLA_puncta_masked
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PLA_puncta_in_SGs
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
RelateObjects:[module_num:21|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
    Parent objects:Cells
    Child objects:PLA_puncta_in_SGs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:22|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
    Name the output measurement:PLA_div_SG_area
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Children_PLA_puncta_in_SGs_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:SGs_merged
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:0.012888014
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:PLA_div_cell_area
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Children_PLA_puncta_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:0.012888014
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:SGs_merged|AreaShape_Area,Cells|Math_PLA_div_cell_area,Cells|Math_PLA_div_SG_area,Cells|AreaShape_Area,Cells|Children_PLA_puncta_in_SGs_Count,Cells|Children_PLA_puncta_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:PLA_SGs.csv
    Use the object name for the file name?:No
    Data to export:SGs_merged
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
