CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:UBQLN2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:PEG10
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ReduceNoise:[module_num:5|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notes:['Reduce the noise in the EGFP channel (G3BP1). This will remove the dim EGFP signal that isn’t a part of SGs.']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
    Select the input image:G3BP1
    Name the output image:G3BP1_low_noise
    Size:2
    Distance:8
    Cut-off distance:0.03

EnhanceOrSuppressFeatures:[module_num:6|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notes:['Enhance SG intensity to help identify SGs.']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
    Select the input image:G3BP1_low_noise
    Name the output image:G3BP1_enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identifying stress granules']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
    Select the input image:G3BP1_enhanced
    Name the primary objects to be identified:SG
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.01,1
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    Size of adaptive window:5
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identify individual cell bodies. This way of identfying cells is much beter at distinguishing clumped cells as each cell is defined by having a nucleus.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell_body
    Select the method to identify the secondary objects:Propagation
    Select the input image:UBQLN2
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.01,0.9
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Identify cytoplasm defined as the whole cell minus the nucleus']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
    Select the larger identified objects:Cell_body
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:SG
    Name the tertiary objects to be identified:CytoplasmExcludeSG
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:12|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notes:['Relate SGs and the cell cytoplasms they are in']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
    Parent objects:Cytoplasm
    Child objects:SG
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:13|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notes:['Merge all SGs into one object']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
    Select the input objects:SG
    Name the new objects:SG_merged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cytoplasm
    Output object type:Disconnected

MeasureObjectIntensity:[module_num:14|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notes:['Measure UBQLN2 intensity within SGs and cytoplasms']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
    Select images to measure:UBQLN2
    Select objects to measure:Cytoplasm, CytoplasmExcludeSG, SG_merged

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:PEG10
    Select objects to measure:Cytoplasm, CytoplasmExcludeSG, SG_merged

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:SG, SG_merged
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

CalculateMath:[module_num:18|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
    Name the output measurement:SGminCytExcSG_PEG10_MeanInt
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:SG_merged
    Select the minuend measurement:Intensity_MeanIntensity_PEG10
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:CytoplasmExcludeSG
    Select the subtrahend measurement:Intensity_MeanIntensity_PEG10
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:19|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
    Name the output measurement:SGminCytoExcSG_UBQLN2_MeanInt
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:SG_merged
    Select the minuend measurement:Intensity_MeanIntensity_UBQLN2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:CytoplasmExcludeSG
    Select the subtrahend measurement:Intensity_MeanIntensity_UBQLN2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
GrayToColor:[module_num:20|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notes:['Merge EGFP, V5 and UBQLN2 channels into a composite image.']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:Merged_image
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    Hidden:4
    Image name:DAPI
    Color:#0000F4
    Weight:1.0
    Image name:G3BP1
    Color:#F0F800
    Weight:1.0
    Image name:PEG10
    Color:#00FCF1
    Weight:1.0
    Image name:UBQLN2
    Color:#FF00FF
    Weight:1.0

DisplayDataOnImage:[module_num:21|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notes:['Display PEG10 distribution values on each cell']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
    Display object or image measurements?:Object
    Select the input objects:CytoplasmExcludeSG
    Measurement to display:Math_SGminCytExcSG_PEG10_MeanInt
    Select the image on which to display the measurements:Merged_image
    Text color:#FFFFFF
    Name the output image that has the measurements displayed:SGminusCytoExSG_PEG10_overlay
    Font size (points):18
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:22|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notes:['Display UBQLN2 distribution values on each cell']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
    Display object or image measurements?:Object
    Select the input objects:CytoplasmExcludeSG
    Measurement to display:Math_SGminCytoExcSG_UBQLN2_MeanInt
    Select the image on which to display the measurements:Merged_image
    Text color:#FFFFFF
    Name the output image that has the measurements displayed:SGminusCytoExSG_UBQLN2_overlay
    Font size (points):18
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:23|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notes:['Save image with UBQLN2 fractions in a separate folder']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
    Select the type of image to save:Image
    Select the image to save:SGminusCytoExSG_UBQLN2_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SGminusCytoExSG_UBQLN2
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop Files\\Data\\IHC\\Hari's Quant Local\\Hela Arsenite Trials 1-3\\Output 1Feb24
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:SGminusCytoExSG_PEG10_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SGminusCytoExSG_PEG10
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop Files\\Data\\IHC\\Hari's Quant Local\\Hela Arsenite Trials 1-3\\Output 1Feb24
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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notes:['Export SG fractions as a spreadsheet']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop Files\\Data\\IHC\\Hari's Quant Local\\Hela Arsenite Trials 1-3\\Output 1Feb24
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cytoplasm|AreaShape_Area,Cytoplasm|Children_SG_Count,SG|AreaShape_FormFactor,SG|AreaShape_Area,SG|Children_SG_merged_Count,SG_merged|AreaShape_Area,SG_merged|AreaShape_FormFactor,SG_merged|Number_Object_Number,SG_merged|Math_SGminCytExcSG_PEG10_MeanInt,SG_merged|Math_SGminCytoExcSG_UBQLN2_MeanInt
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:SG_merged
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:SG
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CytoplasmExcludeSG
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
