CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['The goal of this pipeline is to determine what fraction of cytoplasmic UBQLN2 and cytoplasmic HA-tag in transfected cells is within stress granules. The input are multi-channel TIFF files  containing individual grayscale channels of 4-channel stack: DAPI (C=0), UBQLN2 (C=1), G3BP1 (C=2) and HA (C=3). The output files are a combined image of the channels with the fraction of cytoplasmic UBQLN2 in stress granules overlaid in white, and the fraction of cytoplasmic HA in stress granules in pink, and a spreadsheet with the values from all images.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['Extract Metadata.', '', 'Make sure to click "extract metadata", then click "update".']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['Assign channel name to each image. This is the name by which other modules will refer to it.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:UBQLN2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:HA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ReduceNoise:[module_num:5|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notes:['Reduce the noise in the G3BP1 channel. This will remove the dim G3BP1 signal that isn’t a part of SGs.']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
    Select the input image:G3BP1
    Name the output image:G3BP1_low_noise
    Size:2
    Distance:8
    Cut-off distance:0.03

ReduceNoise:[module_num:6|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notes:['Reduce noise in the DAPI channel.']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
    Select the input image:DAPI
    Name the output image:DAPI_Noiseless
    Size:3
    Distance:5
    Cut-off distance:0.1

EnhanceOrSuppressFeatures:[module_num:7|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notes:['Enhance SG intensity to help identify SGs.']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
    Select the input image:G3BP1_low_noise
    Name the output image:G3BP1_enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
RescaleIntensity:[module_num:8|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notes:['Rescale intensity to fit full range from 0 to 1. Allows for better identification of cell edges.']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
    Select the input image:HA
    Name the output image:HA_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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notes:['Rescale intensity to fit full range from 0 to 1. Allows for better identification of cell edges.']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
    Select the input image:UBQLN2
    Name the output image:UB2_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Identify stress granules using G3BP1 channel.']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
    Select the input image:G3BP1_enhanced
    Name the primary objects to be identified:SG
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.15,1
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    Size of adaptive window:30
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:11|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notes:['Identify Nuclei using DAPI channel.']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
    Select the input image:DAPI_Noiseless
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):70,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.005,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifySecondaryObjects:[module_num:12|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notes:['Identify cells using the UBQLN2 channel. This way of identfying cells is much beter at distinguishing clumped cells as each cell is defined by having a nucleus.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:UB2_rescaled
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    Regularization factor:0.5
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.1,1
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    Log transform before thresholding?:Yes
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    Size of adaptive window:300
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:13|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notes:['Identify cytoplasm defined as the whole cell minus the nucleus']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:14|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notes:['Measure HA intensity within cytoplasms']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
    Select images to measure:HA_rescaled
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:15|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notes:['Measure the area of cytoplasms']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
    Select object sets to measure:Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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notes:['Filter to only keep cells that were transfected (HA positive).']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
    Select the objects to filter:Cytoplasm
    Name the output objects:Filtered_cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_HA_rescaled
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:Yes
    Maximum value:0.99
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:22000
    Filter using a maximum measurement value?:No
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
MeasureColocalization:[module_num:17|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
    Select images to measure:G3BP1, HA
    Set threshold as percentage of maximum intensity for the images:30.0
    Select where to measure correlation:Within objects
    Select objects to measure:Filtered_cytoplasm
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:Yes
    Method for Costes thresholding:Faster

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - Michigan Medicine\\RTL8 Rescue of UB2 in Stress Granules\\Exp 1 2 Manders
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_DAPI,Filtered_cytoplasm|Correlation_Costes_G3BP1_HA,Filtered_cytoplasm|Correlation_Costes_HA_G3BP1,Filtered_cytoplasm|Correlation_Manders_G3BP1_HA,Filtered_cytoplasm|Correlation_Manders_HA_G3BP1
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt2_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Filtered_cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
