CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'The goal of this pipeline is to determine what fraction of cytoplasmic UBQLN2 in transfected cells is within stress granules. The input are individual grayscale channels of a 4 color stack: DAPI (C=0), V5 (C=1), EGFP-G3BP1 (C=2) and UBQLN2 (C=3). The output files are a composite image of the channels with the fraction of cytoplasmic UBQLN2 in stress granules overlaid and a spreadsheet with the values from all images.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:UBQLN2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:EGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:V5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ReduceNoise:[module_num:5|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notes:['Reduce the noise in the EGFP channel (G3BP1). This will remove the dim EGFP signal that isn’t a part of SGs.']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
    Select the input image:EGFP
    Name the output image:EGFP_low_noise
    Size:2
    Distance:8
    Cut-off distance:0.03

ReduceNoise:[module_num:6|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
    Select the input image:DAPI
    Name the output image:DAPI_Noiseless
    Size:3
    Distance:5
    Cut-off distance:0.1

EnhanceOrSuppressFeatures:[module_num:7|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notes:['Enhance SG intensity to help identify SGs.']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
    Select the input image:EGFP_low_noise
    Name the output image:EGFP_enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
RescaleIntensity:[module_num:8|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notes:['Rescale intensity to fit full range from 0 to 1. Allows for better identification of cell edges.']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
    Select the input image:V5
    Name the output image:V5_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['Since the V5 channel has a wide distribution withboth diffuse and punctate staining which affects identification of the enite cell. By reducing the diffuse cytoplasmic signal and increasing punctate signal, identification of the whole cell is made better']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
    Select the input image:V5_rescaled
    Name the output image:V5_enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Identifying stress granules']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
    Select the input image:EGFP_enhanced
    Name the primary objects to be identified:SG
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.01,1
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    Size of adaptive window:30
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:DAPI_Noiseless
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):70,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.005,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifySecondaryObjects:[module_num:12|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notes:['Re-identify transfected cells. This way of identfying cells is much beter at distinguishing clumped cells as each cell is defined by having a nucleus.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:V5_enhanced
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    Regularization factor:0.5
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0085,1
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    Log transform before thresholding?:Yes
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    Size of adaptive window:300
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:13|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notes:['Identify cytoplasm defined as the whole cell minues the nucleus']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:14|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notes:['Measure UBQLN2 intensity within SGs and cytoplasms']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
    Select images to measure:V5_rescaled
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:Cytoplasm
    Name the output objects:Filtered_cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_V5_rescaled
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:22000
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:17|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notes:['Relate SGs and the cell cytoplasms they are in']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
    Parent objects:Filtered_cytoplasm
    Child objects:SG
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:18|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notes:['Merge all SGs into one object']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
    Select the input objects:SG
    Name the new objects:SG_merged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Filtered_cytoplasm
    Output object type:Disconnected

IdentifyTertiaryObjects:[module_num:19|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
    Select the larger identified objects:Filtered_cytoplasm
    Select the smaller identified objects:SG
    Name the tertiary objects to be identified:CytoExcSG
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:Filtered_cytoplasm, SG, SG_merged
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:UBQLN2
    Select objects to measure:CytoExcSG, SG_merged

CalculateMath:[module_num:22|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notes:['Calculate ratio of SG and cytoplasmic intensities for UBQLN2']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
    Name the output measurement:SGminCytoExcSG
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:SG_merged
    Select the minuend measurement:Intensity_MeanIntensity_UBQLN2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:CytoExcSG
    Select the subtrahend measurement:Intensity_MeanIntensity_UBQLN2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
GrayToColor:[module_num:23|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notes:['Merge EGFP, V5 and UBQLN2 channels into a composite image.']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:Merged_image
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    Hidden:4
    Image name:DAPI
    Color:#0000F4
    Weight:1.0
    Image name:EGFP
    Color:#F0F800
    Weight:1.0
    Image name:V5
    Color:#00FCF1
    Weight:1.0
    Image name:UBQLN2
    Color:#FF00FF
    Weight:1.0

DisplayDataOnImage:[module_num:24|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notes:['Display UBQLN2 distribution values on each cell']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
    Display object or image measurements?:Object
    Select the input objects:CytoExcSG
    Measurement to display:Math_SGminCytoExcSG
    Select the image on which to display the measurements:Merged_image
    Text color:#FFFFFF
    Name the output image that has the measurements displayed:Fraction_SG_overlay
    Font size (points):18
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:CytoExcSG
    Name the output image:FilteredCytoImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:FilteredCytoImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop Files\\Data\\IHC\\Hari's Quant Local\\U2OS\\20240220 analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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notes:['Save image with UBQLN2 fractions in a separate folder']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
    Select the type of image to save:Image
    Select the image to save:Fraction_SG_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:fraction_SG
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop Files\\Data\\IHC\\Hari's Quant Local\\U2OS\\20240220 analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:28|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notes:['Export SG fractions as a spreadsheet']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop Files\\Data\\IHC\\Hari's Quant Local\\U2OS\\20240220 analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:SG_merged|Intensity_MeanIntensity_UBQLN2,SG_merged|AreaShape_Area,SG_merged|Number_Object_Number,Filtered_cytoplasm|AreaShape_Area,Filtered_cytoplasm|Children_SG_Count,CytoExcSG|Math_SGminCytoExcSG
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:CytoExcSG
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Filtered_cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:SG_merged
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
